PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = prototype_exp
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Fixation
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    TextComponent fixation_cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = +
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  Routine Stimulus
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    PolygonComponent red_circle
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 5.0
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    CodeComponent time_logger
      Code Type = Py
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      Begin Routine:
        import time
        thisExp.addData('stimulus_onset', time.time())
  Routine Rest
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    TextComponent rest_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Resting...
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 75
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    Routine Fixation
    Routine Stimulus
    Routine Rest
  LoopTerminator trials
